var spikefile%, textfile%, memChan%; '% means integer, $ is string
var intanSamplingRate% := 20000;

spikefile% := FileOpen("*.smr", 0, 0, "Please choose a .smr data file.");      ' name, type, mode
PrintLog("%s\n", View(spikefile%).MaxTime());
memChan% := MemChan(5, 500);                 ' Create memory text channel
'findsize = length of recording * sr

textfile% := FileOpen("*markers.txt", 1, 0, "Please choose a .txt file.");'text, read only 
if (textfile% > 0) then
    var txtmrk$, lastMarker := 0.0, maxT := view(spikefile%).MaxTime();
    PrintLog(lastMarker, " ,maxT: ",  maxT);
    'reads next line from file, overwrites currentmarker$
    'We will iteratively chanSearch from here.        
    while Read(txtmrk$) >= 0 do
        '                     chan,rising,start,end, thres, hysteresis, minwidth
        view(spikefile%);lastMarker := ChanSearch(10,7,lastMarker,maxT,1.5,0,0.5); 'gets next timestamp THIRD
        
        if(lastMarker = -1) then break endif;
        
        view(textfile%);doTxtMrk(txtmrk$, lastMarker);
    wend;
    'close text file
    view(textfile%);
    FileClose();
endif

' Tidy up, save memory channel and close spike file
view(spikefile%);                           'select the spike2 data file
MemSave(memChan%, 32, 0, 1);                'Save text markers in channel 32, overwrite without query
ChanDelete(memChan%);
ChanShow(32);                               'need to actually show channel
'FileClose();
halt;

Func doTxtMrk(input$, time)
var cd%[4];                                 'you need a code to be able to sort it later
if input$ = "1" then cd%[0] := 1;endif
if input$ = "2" then cd%[0] := 2;endif
if input$ = "3" then cd%[0] := 3;endif
if input$ = "4" then cd%[0] := 4;endif
if input$ = "5" then cd%[0] := 5;endif
if input$ = "L" then cd%[0] := 1;endif
' chan, defers to next param, time,  code,  textmark
view(spikefile%).MemSetItem(memChan%, 0, time, cd%[], input$);
end


